//  ******************************************************
// 
//     File generated by: neuroConstruct v1.7.1
// 
//  ******************************************************

{load_file("nrngui.hoc")}

//  Initialising stopwatch for timing setup

{startsw()}

print ""
print "*****************************************************"
print ""
print "    neuroConstruct generated NEURON simulation "
print "    for project: /home_local/dilawars/nC_projects/Ex3_Morphology_copy/Ex3_Morphology_copy.ncx "
print ""
print "    Description: This example demonstrates importation of a number of cell morphology files in different formats, including the Purkinje Cell Model of Erik De Schutter and Jim Bower."
print "    "
print "    To include the cells in the project go to the tab Cell Types, click Add New Cell Type to Project. Click on GenesisMorphReader (or any of the others...) and browse to the directory: examples/Ex3-Morphology/importedMorphologies. Here you will find examples of morphologies you can import into the project. After these are loaded you can click: View/edit morphology to see it in 3D. "
print "      "
print "    A pyramidal cell neuron as included with the standard NEURON distribution is also included. The importation of this shows how the validation checks can help highlight potential problems when using a morphology from one simulator on another platform. Try viewing the cell with Original Compartmentalisation selected to see sections, segments, and connections more clearly."
print "    "
print "    There are also examples included of a Neurolucida format file, a MorphML file and an SWC format morphology."
print "    "
print "    For more details on importing each format see the documentation under menu item Help -> Help -> Importing morphology files. "
print "     "
print ""
print "    Simulation Configuration: SimConfig: Default Simulation Configuration "
print "    This is the default configuration of the Cell Groups, stimulations, plots, etc for this project "
print " "
print  "*****************************************************"

strdef pwd
{system("pwd", pwd)}
print ""
print "Current working dir: ", pwd

objectvar allCells
{allCells = new List()}


//  A flag to signal simulation was generated by neuroConstruct 

{nC = 1}


//  Including neuroConstruct utilities file 

{load_file("nCtools.hoc")}

//  Including neuroConstruct cell check file 

{load_file("cellCheck.hoc")}

//  Getting hostname

objref strFuncs
{strFuncs = new StringFunctions()}
strdef host
{system("hostname", host)}
if (strFuncs.len(host)>0) {
    strFuncs.left(host, strFuncs.len(host)-1) 
} else {
    host = "????" 
}


//  Simulation running in serial mode, setting default host id

{hostid = 0}


//  Initializes random-number generator

{use_mcell_ran4(1)}

{mcell_ran4_init(1237704261)}

//////////////////////////////////////////////////////////////////////
//   Cell group 0: CellGroup_1 has cells of type: l22
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: l22.hoc for cell group CellGroup_1

{ load_file("l22.hoc") }

//  Adding 1 cells of type l22 in region Regions_1

{n_CellGroup_1 = 1}

{n_CellGroup_1_local = 0 } // actual number created on this host

objectvar a_CellGroup_1[n_CellGroup_1]

proc addCell_CellGroup_1() {
    strdef reference
    sprint(reference, "CellGroup_1_%d", $1)
    a_CellGroup_1[$1] = new l22(reference, "l22", "Cell morphology generated by neuroConstruct from file: l22.swc ORIGINAL_SOURCE Neurolucida CREATURE rat F344 REGION Hippocampus FIELD/LAYER CA3 TYPE CA3c Pyramidal Cell in vivo young CONTRIBUTOR Buzsaki_G and Turner_DA REFERENCE J. Comp. Neurol. 356: 580-594, 1995 RAW l22.asc EXTRAS Turner_P.CA3 SOMA_AREA 0.98E3 SHRINKAGE_CORRECTION 1.33 1.33 2.5 VERSION_NUMBER 2.0 VERSION_DATE 1998-03-27 ********************************************* SCALE 1.33  1.33  2.5 ")
    allCells.append(a_CellGroup_1[$1])
}

for i = 0, n_CellGroup_1-1 {
    addCell_CellGroup_1(i)
    n_CellGroup_1_local = n_CellGroup_1_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (120.0, 50.0, 120.0)


//  Packing has been generated by: Random: num: 1, edge: 1, overlap: 1, other overlap: 1

{a_CellGroup_1[0].position(64.79381,45.2594,70.0903)}


//////////////////////////////////////////////////////////////////////
//   Setting initial parameters
//////////////////////////////////////////////////////////////////////

strdef simConfig
{simConfig = "Default Simulation Configuration"}
{celsius = 6.3}



proc initialiseValues0() {


//  Setting initial vals in cell group: CellGroup_1 which has 1 cells


//  Giving all cells an initial potential of: -60.0

    for i = 0, n_CellGroup_1-1 {
        forsec a_CellGroup_1[i].all  v = -60.0

    }

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}



//////////////////////////////////////////////////////////////////////
//   Adding Network Connections
//////////////////////////////////////////////////////////////////////


//////////////////////////////////////////////////////////////////////
//   Adding 1 stimulation(s)
//////////////////////////////////////////////////////////////////////

{ n_stim_Input_0 = 1 }
objectvar stim_Input_0[n_stim_Input_0]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Comp_1

//  in section: Soma. For NEURON, this translates to a point 0.33331072 along section: Soma

a_CellGroup_1[0].Soma {
    stim_Input_0[0] = new CurrentClampExt(0.33331072)
    stim_Input_0[0].del = 20.0
    stim_Input_0[0].dur = 60.0
    stim_Input_0[0].amp = 0.2
    stim_Input_0[0].repeat = 0
}


access l22[0].Soma

//////////////////////////////////////////////////////////////////////
//   Settings for running the demo
//////////////////////////////////////////////////////////////////////


tstop = 100.0
dt = 0.02
steps_per_ms = 50.0

//////////////////////////////////////////////////////////////////////
//   Adding 1 plot(s)
//////////////////////////////////////////////////////////////////////


//   This code pops up a plot of a_CellGroup_1[0].Soma.v(0.33331072)

objref CellGroup_1_v
CellGroup_1_v = new Graph(0)
{CellGroup_1_v.size(0, tstop,-90.0,50.0)}
{CellGroup_1_v.view(0, -90.0, tstop, 140.0, 80, 330, 330, 250)}
{
    CellGroup_1_v.addexpr("a_CellGroup_1[0].Soma.v", "a_CellGroup_1[0].Soma.v(0.33331072)", 1, 1, 0.8, 0.9, 2)
    graphList[0].append(CellGroup_1_v)
}

//   This code pops up a Shape plot of the cells

objref plotShape
plotShape = new PlotShape()
plotShape.exec_menu("Shape Plot")

fast_flush_list.append(plotShape)


//////////////////////////////////////////////////////////////////////
//   This will run a full simulation of 5001 steps when the hoc file is executed
//////////////////////////////////////////////////////////////////////


//  Recording 1 variable(s)

objref v_time
objref f_time
objref propsFile

v_time = new Vector()
{ v_time.record(&t) }
{ v_time.resize(5001) } // true
f_time = new File()


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in CellGroup_1


//  Creating vector for segment: Comp_1(ID: 0)

objref v_CellGroup_1_seg_Comp_1_v[1]
for i=0, 0 {
    { v_CellGroup_1_seg_Comp_1_v[i] = new Vector() }
    { v_CellGroup_1_seg_Comp_1_v[i].record(&a_CellGroup_1[i].Soma.v(0.33331072))} 
    { v_CellGroup_1_seg_Comp_1_v[i].resize(5001) }
}
objref f_CellGroup_1_seg_Comp_1_v[1]

strdef simReference
simReference = "Sim_1"



strdef simsDir
simsDir = "/home_local/dilawars/nC_projects/Ex3_Morphology_copy/simulations/"


//  Note: to change location of the generated simulation files, just change value of targetDir
//  e.g. targetDir="" or targetDir="aSubDir/"

strdef targetDir
{ sprint(targetDir, "%s%s/", simsDir, simReference)}


//  Single simulation run...

strdef date
// Note: not showing date/time of start/stop of simulation. This requires Cygwin to be installed// which includes the "date" unix command. Install under c:\cygwin

setuptime = stopsw()

print "Setup time for simulation: ",setuptime," seconds"

print "Starting simulation of duration ",tstop,"ms,  variable time step, reference: ",simReference,""

{currenttime = startsw()}
//////////////////////////////////////////////////////////////////////
//   Main run statement
//////////////////////////////////////////////////////////////////////


//  Setting basic variable time step active

{cvode.active(1)}
{cvode.atol(0.001)}
{run()}

{realruntime = startsw() - currenttime}
print "Finished simulation in ", realruntime ,"seconds"

print "Storing the data..."

strdef timeFilename
nrnpython("import numpy")
nrnpython("import tables")

nrnpython("from neuron import *")


nrnpython("h5file = tables.openFile(h.targetDir+'Sim_1_.h5', mode = 'w', title = 'Generated via neuroConstruct')")


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in CellGroup_1


//  Saving vector for segment: Comp_1(ID: 0)

print "Using HDF5 save mode: 4"
{nrnpython("allData = numpy.ones( (h.v_time.size(), h.n_CellGroup_1_local ) , dtype=numpy.float32 )")}
{nrnpython("time_data = numpy.array(h.v_time.to_python()) ")}
{nrnpython("allData = allData * -1")}
{nrnpython("print allData.shape")}

{nrnpython("columnsVsCellNums = {}")}

{nrnpython("columnIndex = 0")}

for cellNum=0, n_CellGroup_1-1 {
    { print "Adding data for cell number ",cellNum," in CellGroup_1 on host ", hostid}
    { nrnpython("allData[:,columnIndex] = h.v_CellGroup_1_seg_Comp_1_v[int(h.cellNum)].to_python()")}
    {nrnpython("columnsVsCellNums[columnIndex] = int(h.cellNum)")}

    {nrnpython("columnIndex += 1")}

}

{nrnpython("print columnsVsCellNums")}

{nrnpython("group1 = h5file.createGroup('/', 'CellGroup_1', 'CellGroup_1')")}
{nrnpython("group1._v_attrs.Population = 'CellGroup_1'")}
{nrnpython("hArray = h5file.createArray(group1, 'VOLTAGE', allData, 'Values of VOLTAGE from cell group: CellGroup_1')")}
{nrnpython("hArray.setAttr('Variable', 'VOLTAGE')")}
{nrnpython("for columnIndex in columnsVsCellNums.keys(): hArray.setAttr('column_'+str(columnIndex), 'cellNum_'+ str(columnsVsCellNums[columnIndex]))")}

{ sprint(timeFilename, "%s%s", targetDir, "time.dat")}
{ f_time.wopen(timeFilename) }
{ v_time.printf(f_time) }
{ f_time.close() }

{savetime = stopsw()}

propsFile = new File()
strdef propsFilename
{sprint(propsFilename, "%ssimulator.props", targetDir)}
{propsFile.wopen(propsFilename)}
{propsFile.printf("#This is a list of properties generated by NEURON during the simulation run\n")}
{propsFile.printf("Host=%s\n", host)}
{propsFile.printf("RealSimulationTime=%g\n", realruntime)}
{propsFile.printf("SimulationSaveTime=%g\n", savetime)}
{propsFile.printf("SimulationSetupTime=%g\n", setuptime)}
{propsFile.printf("NEURONversion=%s\n", nrnversion())}
{propsFile.close()}

print "Data stored in ",savetime, "secs in directory: ", targetDir

{nrnpython("print 'Closing file: '+h5file.filename")}
{nrnpython("h5file.close()")}

//   This code pops up a simple Run Control

{
xpanel("RunControl", 0)
v_init = -60.0
xbutton("Init & Run","run()")
xbutton("Stop","stoprun=1")
t = 0
xvalue("t","t", 2 )
tstop = 100.0
xvalue("Tstop","tstop", 1,"tstop_changed()", 0, 1 )
dt = 0.02
 xvalue("dt","dt", 1,"setdt()", 0, 1 )
xpanel(80,80)
}

